<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:CreateSerialPort">
          <port:Name>VRPORT</port:Name>
          <port:PortName>COM5</port:PortName>
          <port:BaudRate>9600</port:BaudRate>
          <port:NewLine>\r\n</port:NewLine>
          <port:Parity>None</port:Parity>
          <port:ParityReplace>63</port:ParityReplace>
          <port:DataBits>8</port:DataBits>
          <port:StopBits>One</port:StopBits>
          <port:Handshake>None</port:Handshake>
          <port:DiscardNull>false</port:DiscardNull>
          <port:DtrEnable>true</port:DtrEnable>
          <port:RtsEnable>false</port:RtsEnable>
          <port:ReadBufferSize>4096</port:ReadBufferSize>
          <port:WriteBufferSize>2048</port:WriteBufferSize>
          <port:ReceivedBytesThreshold>1</port:ReceivedBytesThreshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Up</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>p</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:SerialWriteLine">
          <port:PortName>VRPORT</port:PortName>
          <port:NewLine />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Left</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>r</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:SerialWriteLine">
          <port:PortName>VRPORT</port:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Right</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>q</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:SerialWriteLine">
          <port:PortName>VRPORT</port:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:SerialReadLine">
          <port:PortName>VRPORT</port:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>