<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:CreateSerialPort">
          <port:Name>VRPORT</port:Name>
          <port:PortName>COM4</port:PortName>
          <port:BaudRate>9600</port:BaudRate>
          <port:NewLine>\r\n</port:NewLine>
          <port:Parity>None</port:Parity>
          <port:ParityReplace>63</port:ParityReplace>
          <port:DataBits>8</port:DataBits>
          <port:StopBits>One</port:StopBits>
          <port:Handshake>None</port:Handshake>
          <port:DiscardNull>false</port:DiscardNull>
          <port:DtrEnable>true</port:DtrEnable>
          <port:RtsEnable>false</port:RtsEnable>
          <port:ReadBufferSize>4096</port:ReadBufferSize>
          <port:WriteBufferSize>2048</port:WriteBufferSize>
          <port:ReceivedBytesThreshold>1</port:ReceivedBytesThreshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="wie:KeyDown">
            <wie:Filter>Up</wie:Filter>
            <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Timer">
            <rx:DueTime>PT10S</rx:DueTime>
            <rx:Period>PT5M</rx:Period>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="StringProperty">
            <Value>p</Value>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="port:SerialWriteLine">
            <port:PortName>VRPORT</port:PortName>
            <port:NewLine />
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Left</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Timer">
            <rx:DueTime>PT5S</rx:DueTime>
            <rx:Period>PT5M</rx:Period>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Delay">
            <rx:DueTime>PT3S</rx:DueTime>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>r</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="port:SerialWriteLine">
            <port:PortName>VRPORT</port:PortName>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:SerialWriteLine">
          <port:PortName>VRPORT</port:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Right</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Timer">
            <rx:DueTime>PT5S</rx:DueTime>
            <rx:Period>PT5M</rx:Period>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Delay">
            <rx:DueTime>PT0S</rx:DueTime>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>q</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Workflow>
            <Nodes>
              <Expression xsi:type="Disable">
                <Builder xsi:type="WorkflowInput">
                  <Name>Source1</Name>
                </Builder>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Timer">
                  <rx:DueTime>PT5S</rx:DueTime>
                  <rx:Period>PT5M</rx:Period>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Delay">
                  <rx:DueTime>PT3S</rx:DueTime>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="StringProperty">
                  <Value>q</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="4" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="3" To="4" Label="Source2" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:SerialWriteLine">
          <port:PortName>VRPORT</port:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="port:SerialWriteLine">
            <port:PortName>VRPORT</port:PortName>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:SerialReadLine">
          <port:PortName>VRPORT</port:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="8" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="8" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="15" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source2" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="16" To="19" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>