<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:pylon="clr-namespace:Bonsai.Pylon;assembly=Bonsai.Pylon"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:CreateSerialPort">
          <port:Name>VRPORT</port:Name>
          <port:PortName>COM5</port:PortName>
          <port:BaudRate>9600</port:BaudRate>
          <port:NewLine>\r\n</port:NewLine>
          <port:Parity>None</port:Parity>
          <port:ParityReplace>63</port:ParityReplace>
          <port:DataBits>8</port:DataBits>
          <port:StopBits>One</port:StopBits>
          <port:Handshake>None</port:Handshake>
          <port:DiscardNull>false</port:DiscardNull>
          <port:DtrEnable>true</port:DtrEnable>
          <port:RtsEnable>false</port:RtsEnable>
          <port:ReadBufferSize>4096</port:ReadBufferSize>
          <port:WriteBufferSize>2048</port:WriteBufferSize>
          <port:ReceivedBytesThreshold>1</port:ReceivedBytesThreshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoFeed</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ElementIndex" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Index</Selector>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>CameraFramesFullVideo</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT1M</rx:DueTime>
          <rx:Period>PT3M</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:WithLatestFrom" />
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT2M</rx:DueTime>
          <rx:Period>PT3M</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:WithLatestFrom" />
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT3M</rx:DueTime>
          <rx:Period>PT3M</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Airpuff</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>p</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Throttle">
          <rx:DueTime>PT2S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:SerialWriteLine">
          <port:PortName>VRPORT</port:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Sucrose</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>r</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Throttle">
          <rx:DueTime>PT2S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:SerialWriteLine">
          <port:PortName>VRPORT</port:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="port:SerialWriteLine">
            <port:PortName>VRPORT</port:PortName>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Quinine</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>q</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Throttle">
          <rx:DueTime>PT2S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:SerialWriteLine">
          <port:PortName>VRPORT</port:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new (
  it.Item1 as Cameraframes,
  it.Item2 as Quinine_video,
  it.Item3 as Airpuff_video,
  it.Item4 as Sucrose_video,
  it.Item5 as Airpuff_stim,
  it.Item6 as Sucrose_stim,
  it.Item7 as Quinine_stim
)</scr:Expression>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>CameraFrames.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Throttle">
          <rx:DueTime>PT2S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>COM4</ard:PortName>
          <ard:Pin>13</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>COM4</ard:PortName>
          <ard:Pin>13</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
                <Selector>Value.Item2</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="StringProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>SubData</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>VideoFeed</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SubData</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}/{0}_{1}_{2}_{3}_{4}.avi</Format>
              <Selector>Timestamp.DateTime.Day,Timestamp.DateTime.Hour,Timestamp.DateTime.Minute,Timestamp.DateTime.Second,Timestamp</Selector>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="FileName" />
                </PropertyMappings>
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:FileName>Sucrose/Sucrose.avi</cv:FileName>
                <cv:Suffix>Timestamp</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>false</cv:Overwrite>
                <cv:FourCC>FMP4</cv:FourCC>
                <cv:FrameRate>100</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT5S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="8" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
                <Selector>Value.Item2</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="StringProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>SubData</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>VideoFeed</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SubData</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}/{0}_{1}_{2}_{3}_{4}.avi</Format>
              <Selector>Timestamp.DateTime.Day,Timestamp.DateTime.Hour,Timestamp.DateTime.Minute,Timestamp.DateTime.Second,Timestamp</Selector>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="FileName" />
                </PropertyMappings>
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:FileName>Quininef/Quinine.avi</cv:FileName>
                <cv:Suffix>Timestamp</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>false</cv:Overwrite>
                <cv:FourCC>FMP4</cv:FourCC>
                <cv:FrameRate>100</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT5S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="8" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
                <Selector>Value.Item2</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="StringProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>SubData</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>VideoFeed</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SubData</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}/{0}_{1}_{2}_{3}_{4}.avi</Format>
              <Selector>Timestamp.DateTime.Day,Timestamp.DateTime.Hour,Timestamp.DateTime.Minute,Timestamp.DateTime.Second,Timestamp</Selector>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="FileName" />
                </PropertyMappings>
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:FileName>Airpuff/Airpuff.avi</cv:FileName>
                <cv:Suffix>Timestamp</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>false</cv:Overwrite>
                <cv:FourCC>FMP4</cv:FourCC>
                <cv:FrameRate>100</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT5S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="8" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Throttle">
          <rx:DueTime>PT2S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>COM4</ard:PortName>
          <ard:Pin>13</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>COM4</ard:PortName>
          <ard:Pin>13</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Throttle">
          <rx:DueTime>PT2S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>COM4</ard:PortName>
          <ard:Pin>13</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>COM4</ard:PortName>
          <ard:Pin>13</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Description>FrontCam</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>SubData</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SubData</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>front_{0}/front_{0}_{1}_{2}_{3}_{4}.avi</Format>
              <Selector>Timestamp.DateTime.Day,Timestamp.DateTime.Hour,Timestamp.DateTime.Minute,Timestamp.DateTime.Second,Timestamp</Selector>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="FileName" />
                </PropertyMappings>
              </Builder>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>VideoFeedFront</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:FileName>Airpuff/Airpuff.avi</cv:FileName>
                <cv:Suffix>Timestamp</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>false</cv:Overwrite>
                <cv:FourCC>FMP4</cv:FourCC>
                <cv:FrameRate>40</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT5S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Description>FrontCam</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>SubData</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SubData</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>front_{0}/front_{0}_{1}_{2}_{3}_{4}.avi</Format>
              <Selector>Timestamp.DateTime.Day,Timestamp.DateTime.Hour,Timestamp.DateTime.Minute,Timestamp.DateTime.Second,Timestamp</Selector>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="FileName" />
                </PropertyMappings>
              </Builder>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>VideoFeedFront</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:FileName>Airpuff/Airpuff.avi</cv:FileName>
                <cv:Suffix>Timestamp</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>false</cv:Overwrite>
                <cv:FourCC>FMP4</cv:FourCC>
                <cv:FrameRate>40</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT5S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Description>FrontCam</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>SubData</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SubData</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>front_{0}/front_{0}_{1}_{2}_{3}_{4}.avi</Format>
              <Selector>Timestamp.DateTime.Day,Timestamp.DateTime.Hour,Timestamp.DateTime.Minute,Timestamp.DateTime.Second,Timestamp</Selector>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="FileName" />
                </PropertyMappings>
              </Builder>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>VideoFeedFront</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:FileName>Airpuff/Airpuff.avi</cv:FileName>
                <cv:Suffix>Timestamp</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>false</cv:Overwrite>
                <cv:FourCC>FMP4</cv:FourCC>
                <cv:FrameRate>40</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT5S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="pylon:PylonCapture">
          <pylon:SerialNumber>40457504</pylon:SerialNumber>
          <pylon:ParameterFile>a2A1920-160umPRO_40457504_100fps.pfs</pylon:ParameterFile>
          <pylon:GrabStrategy>OneByOne</pylon:GrabStrategy>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>VideoFeed</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoFeed</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>CompleteVideos/Complete.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>100</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="pylon:PylonCapture">
          <pylon:SerialNumber>40344654</pylon:SerialNumber>
          <pylon:ParameterFile>a2A3840-45umPRO_40344654_40fps.pfs</pylon:ParameterFile>
          <pylon:GrabStrategy>OneByOne</pylon:GrabStrategy>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>VideoFeedFront</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoFeedFront</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>CompleteVideos_front/Complete_front.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>40</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="14" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="13" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="9" To="12" Label="Source1" />
      <Edge From="9" To="57" Label="Source1" />
      <Edge From="9" To="84" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="13" Label="Source2" />
      <Edge From="12" To="13" Label="Source3" />
      <Edge From="12" To="74" Label="Source1" />
      <Edge From="13" To="14" Label="Source2" />
      <Edge From="14" To="23" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="22" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="18" To="20" Label="Source1" />
      <Edge From="18" To="36" Label="Source1" />
      <Edge From="18" To="78" Label="Source1" />
      <Edge From="19" To="22" Label="Source2" />
      <Edge From="19" To="76" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source3" />
      <Edge From="22" To="23" Label="Source2" />
      <Edge From="23" To="63" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="31" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="27" To="29" Label="Source1" />
      <Edge From="27" To="46" Label="Source1" />
      <Edge From="27" To="66" Label="Source1" />
      <Edge From="28" To="31" Label="Source2" />
      <Edge From="28" To="72" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source3" />
      <Edge From="31" To="63" Label="Source2" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="41" Label="Source1" />
      <Edge From="35" To="36" Label="Source2" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="38" To="41" Label="Source2" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="41" Label="Source3" />
      <Edge From="41" To="63" Label="Source3" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="51" Label="Source1" />
      <Edge From="45" To="46" Label="Source2" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="47" To="48" Label="Source1" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="48" To="51" Label="Source3" />
      <Edge From="49" To="50" Label="Source1" />
      <Edge From="50" To="51" Label="Source2" />
      <Edge From="51" To="63" Label="Source4" />
      <Edge From="52" To="53" Label="Source1" />
      <Edge From="53" To="54" Label="Source1" />
      <Edge From="54" To="62" Label="Source1" />
      <Edge From="55" To="60" Label="Source1" />
      <Edge From="55" To="62" Label="Source3" />
      <Edge From="56" To="57" Label="Source2" />
      <Edge From="57" To="58" Label="Source1" />
      <Edge From="58" To="59" Label="Source1" />
      <Edge From="59" To="60" Label="Source2" />
      <Edge From="59" To="62" Label="Source4" />
      <Edge From="60" To="61" Label="Source1" />
      <Edge From="61" To="62" Label="Source2" />
      <Edge From="62" To="63" Label="Source5" />
      <Edge From="63" To="64" Label="Source1" />
      <Edge From="64" To="65" Label="Source1" />
      <Edge From="66" To="67" Label="Source1" />
      <Edge From="67" To="68" Label="Source1" />
      <Edge From="68" To="69" Label="Source1" />
      <Edge From="69" To="70" Label="Source1" />
      <Edge From="70" To="71" Label="Source1" />
      <Edge From="72" To="73" Label="Source1" />
      <Edge From="72" To="92" Label="Source1" />
      <Edge From="74" To="75" Label="Source1" />
      <Edge From="74" To="91" Label="Source1" />
      <Edge From="76" To="77" Label="Source1" />
      <Edge From="76" To="90" Label="Source1" />
      <Edge From="78" To="79" Label="Source1" />
      <Edge From="79" To="80" Label="Source1" />
      <Edge From="80" To="81" Label="Source1" />
      <Edge From="81" To="82" Label="Source1" />
      <Edge From="82" To="83" Label="Source1" />
      <Edge From="84" To="85" Label="Source1" />
      <Edge From="85" To="86" Label="Source1" />
      <Edge From="86" To="87" Label="Source1" />
      <Edge From="87" To="88" Label="Source1" />
      <Edge From="88" To="89" Label="Source1" />
      <Edge From="93" To="94" Label="Source1" />
      <Edge From="94" To="95" Label="Source1" />
      <Edge From="96" To="97" Label="Source1" />
      <Edge From="98" To="99" Label="Source1" />
      <Edge From="99" To="100" Label="Source1" />
      <Edge From="101" To="102" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>